<?xml version="1.0" encoding="UTF-8"?>
<bioml>
<note type="input" label="list path, default parameters">{TANDEMK_DEFAULT_PARAM}</note>
<note type="input" label="list path, taxonomy information">{FILENAME_TAXON}</note>
<note type="input" label="protein, taxon">{DB_NAME}</note>
<note type="input" label="spectrum, path">{FILENAME_MZXML}</note>
<note type="input" label="output, path">{FILENAME_OUT}</note>
<note type="input" label="output, log path">{FILENAME_LOG}</note>
<note type="input" label="output, log path"></note>
<note type="input" label="scoring, algorithm">k-score</note>
<note label="spectrum, use conditioning" type="input">no</note>
<note label="scoring, minimum ion count" type="input">4</note>
<note type="input" label="output, results">valid</note>
<note type="input" label="output, maximum valid expectation value">50</note>
<note type="input" label="output, message">...busy...</note>
<note type="input" label="output, sequences">no</note>
<note type="input" label="output, sort results by">spectrum</note>
<note type="input" label="spectrum, fragment monoisotopic mass error">0.7</note>
<note type="input" label="protein, C-terminal residue modification mass"></note>
<note type="input" label="protein, N-terminal residue modification mass"></note>
<note type="input" label="protein, cleavage semi">no</note>
<note type="input" label="scoring, maximum missed cleavage sites">2</note>
<note type="input" label="spectrum, minimum fragment mz">150.0</note>
<note type="input" label="spectrum, total peaks">100</note>
<note type="input" label="spectrum, minimum peaks">15</note>
<note type="input" label="spectrum, parent monoisotopic mass error units">ppm</note>
<note type="input" label="spectrum, parent monoisotopic mass isotope error">yes</note>
<note type="input" label="spectrum, parent monoisotopic mass error minus">10.0</note>
<note type="input" label="spectrum, parent monoisotopic mass error plus">10.0</note>
<note type="input" label="spectrum, fragment mass type">monoisotopic</note>
<note type="input" label="residue, potential modification mass">15.9949@M</note>
<note type="input" label="residue, modification mass">57.021464@C</note>
<note type="input" label="refine">no</note>
<note type="input" label="refine, cleavage semi">no</note>
<note type="input" label="refine, unanticipated cleavage">no</note>
<note type="input" label="refine, potential modification mass">16.0@W,16.0@H,22.0@S</note>
<note type="input" label="refine, sequence path"></note>
<note type="input" label="refine, tic percent">20</note>
<note type="input" label="refine, spectrum synthesis">yes</note>
<note type="input" label="refine, maximum valid expectation value">0.01</note>
<note type="input" label="refine, potential N-terminus modifications"></note>
<note type="input" label="refine, use potential modifications for full refinement">no</note>
<note type="input" label="protein, saps">no</note>
<note type="input" label="protein, quick acetyl">no</note>
<note type="input" label="protein, quick pyrolidone">no</note>
</bioml>
